OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:16"
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 58.000000
  High cut frequency (Hz) = 62.000000
  Pass band ripple (dB) = 0.500000
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 58
  Pass band ripple (dB) = 0.5
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
Data=#4 -> Signal display "Alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = true
Input signal=#3 -> LSL Export
  Signal stream = OpenViBE Stream - Band Pass Filtered
  Marker stream = openvibeMarkers
Data=#3 -> 0xc67a01dc Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = true
